<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>

<command_sequence>
	     
		 
	<valve_protocol>Hybridize 3</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T2_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T2_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T2_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 4</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T3_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T3_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T3_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 5</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T4_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T4_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T4_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 6</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T5_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T5_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T5_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 7</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T6_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T6_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T6_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 8</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T7_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T7_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T7_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 9</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T8_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T8_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T8_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 10</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T9_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T9_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T9_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 11</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T10_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T10_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T10_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 12</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T11_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T11_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T11_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 13</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T12_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T12_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T12_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 14</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T13_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T13_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T13_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 15</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T14_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T14_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T14_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 16</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T15_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T15_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T15_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>
	  
	  
	<valve_protocol>StripFormamide</valve_protocol> 
	<valve_protocol>Hybridize 17</valve_protocol> 	
      <wakeup>20000</wakeup>
   <change_directory>F:\Zane\241207_WTC11_SFv7\T16_MER</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
          <delay>2000</delay>
      <copy_directory>
        <source_path>F:\Zane\241207_WTC11_SFv7\T16_MER</source_path>
        <target_path>M:\Zane\241207_WTC11_SFv7\T16_MER</target_path>
        <delete_source>True</delete_source>
      </copy_directory>


	<valve_protocol>StripFormamide</valve_protocol>  
      
      
      
      
      
      
</command_sequence>

<item name = "Conv1">
  <movie>
    <name increment = "Yes">Conv_zscan1</name>
            <overwrite>True</overwrite>
     <length>160</length>
    <parameters>60X_4col_ZG</parameters>
<check_focus><num_focus_checks>20</num_focus_checks><focus_scan/></check_focus>
    <variable_entry name = "Position Loop Zscan1"></variable_entry>
  </movie>
</item>


    <loop_variable name = "Position Loop Zscan1">
   <file_path>pos.txt</file_path>
</loop_variable>
   

    </recipe>