<?xml version="1.0" encoding="ISO-8859-1"?>
<settings>
  <acquisition validate="True">
    <good_lock type="boolean">True</good_lock>
    <lock_mode type="string">Hardware Z Scan</lock_mode>
    <lock_sum type="float">331582.0</lock_sum>
    <lock_target type="float">-0.3155309784946894</lock_target>
    <notes type="string"/>
    <number_frames type="int">256</number_frames>
    <stage_position type="custom">230.30,-2614.00</stage_position>
    <version type="string">b9944e0a32849463bb5c882f5c3b78af08c9c34f</version>
  </acquisition>
  <camera1 validate="True">
    <default_max type="int">20000</default_max>
    <default_min type="int">100</default_min>
    <exposure_time type="float">0.05</exposure_time>
    <extension type="string"/>
    <flip_horizontal type="boolean">True</flip_horizontal>
    <flip_vertical type="boolean">True</flip_vertical>
    <fps type="float">20.0</fps>
    <param_spdtab_index type="int">0</param_spdtab_index>
    <saved type="boolean">True</saved>
    <transpose type="boolean">True</transpose>
    <x_bin type="int">1</x_bin>
    <x_end type="int">3000</x_end>
    <x_pixels type="int">2800</x_pixels>
    <x_start type="int">201</x_start>
    <y_bin type="int">1</y_bin>
    <y_end type="int">3000</y_end>
    <y_pixels type="int">2800</y_pixels>
    <y_start type="int">201</y_start>
  </camera1>
  <display00 validate="False">
    <camera1 validate="True">
      <center_x type="float">1669.0</center_x>
      <center_y type="float">1672.0</center_y>
      <colortable type="string">ramp.ctbl</colortable>
      <display_max type="int">10289</display_max>
      <display_min type="int">30</display_min>
      <initialized type="boolean">True</initialized>
      <scale type="int">-2</scale>
      <sync type="int">0</sync>
    </camera1>
    <feed_name type="string">camera1</feed_name>
  </display00>
  <film validate="False">
    <acq_mode type="string">fixed_length</acq_mode>
    <auto_increment type="boolean">True</auto_increment>
    <auto_shutters type="boolean">True</auto_shutters>
    <extension type="string"/>
    <filename type="string">movie</filename>
    <filetype type="string">.comp.zarr</filetype>
    <frames type="int">256</frames>
    <want_bell type="boolean">True</want_bell>
  </film>
  <focuslock validate="True">
    <calibrate validate="True">
      <deadtime type="int">20</deadtime>
      <frames_to_pause type="int">2</frames_to_pause>
      <range type="float">600.0</range>
      <step_size type="float">10.0</step_size>
    </calibrate>
    <find_sum validate="True">
      <step_size type="float">1.0</step_size>
    </find_sum>
    <hardware_z_scan validate="True">
      <z_offsets type="string">0:-16:-0.25:4</z_offsets>
    </hardware_z_scan>
    <jump_size type="float">0.2</jump_size>
    <locked validate="True">
      <buffer_length type="int">5</buffer_length>
      <lock_gain type="float">0.5</lock_gain>
      <lock_gain_max type="float">0.7</lock_gain_max>
      <minimum_sum type="float">-1.0</minimum_sum>
      <offset_threshold type="float">100.0</offset_threshold>
    </locked>
    <optimal_mode validate="True">
      <bracket_step type="float">1000.0</bracket_step>
      <quality_threshold type="float">0.0</quality_threshold>
      <scan_hold type="int">10</scan_hold>
      <scan_step type="float">100.0</scan_step>
    </optimal_mode>
    <scan validate="True">
      <minimum_sum type="float">10000.0</minimum_sum>
      <offset_threshold type="float">700.0</offset_threshold>
      <scan_range type="float">10.0</scan_range>
      <scan_step type="float">0.75</scan_step>
    </scan>
  </focuslock>
  <illumination validate="True">
    <default_power type="custom">0.280,0.184,0.400,0.024,0.048</default_power>
    <on_off_state type="custom">False,False,False,False,False</on_off_state>
    <power_buttons type="custom">[[['Max', 1.0], ['Low', 0.1]], [['Max', 1.0], ['Low', 0.1]], [['Max', 1.0], ['Low', 0.1]], [['Max', 1.0], ['Low', 0.1]], [['Max', 1.0], ['Low', 0.1]]]</power_buttons>
    <shutters type="string">C:\Scope4Megafish\storm_control\hal4000\batFiles\750_647_561_405_shutter.xml</shutters>
  </illumination>
  <mosaic validate="False">
    <flip_horizontal type="boolean">True</flip_horizontal>
    <flip_vertical type="boolean">True</flip_vertical>
    <obj1 type="custom">60x,0.11,0.0,0.0</obj1>
    <obj2 type="custom">10x,0.65,-210.00,28.00</obj2>
    <objective type="string">obj1</objective>
    <transpose type="boolean">True</transpose>
  </mosaic>
  <stage validate="True">
    <large_step_size type="float">25.0</large_step_size>
    <small_step_size type="float">5.0</small_step_size>
  </stage>
  <timing validate="True">
    <time_base type="string">camera1</time_base>
  </timing>
</settings>
