<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>

<command_sequence>

<valve_protocol>Hybridize 2_A750</valve_protocol>
<change_directory>F:\Jenny\110824_V3_jess_pilot\H86_P3_E7_8_9_750</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>

<delay>2000</delay>
      <copy_directory>
        <source_path>F:\Jenny\110824_V3_jess_pilot\H86_P3_E7_8_9_750</source_path>
        <target_path>M:\Jenny\110824_V3_jess_pilot\H86_P3_E7_8_9_750</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   

<valve_protocol>StripFormamide</valve_protocol>

<valve_protocol>Hybridize 2_Cy5</valve_protocol>
<change_directory>F:\Jenny\110824_V3_jess_pilot\H87_P3_E7_8_9_cy5</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>

<delay>2000</delay>
      <copy_directory>
        <source_path>F:\Jenny\110824_V3_jess_pilot\H87_P3_E7_8_9_cy5</source_path>
        <target_path>M:\Jenny\110824_V3_jess_pilot\H87_P3_E7_8_9_cy5</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   

<valve_protocol>StripFormamide</valve_protocol>

<valve_protocol>Hybridize 2</valve_protocol>
<change_directory>F:\Jenny\110824_V3_jess_pilot\H88_P3_E7_8_9</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>

<delay>2000</delay>
      <copy_directory>
        <source_path>F:\Jenny\110824_V3_jess_pilot\H88_P3_E7_8_9</source_path>
        <target_path>M:\Jenny\110824_V3_jess_pilot\H88_P3_E7_8_9</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   

<valve_protocol>StripFormamide</valve_protocol>

<valve_protocol>Hybridize background</valve_protocol>
<change_directory>F:\Jenny\110824_V3_jess_pilot\H89_background</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>

<delay>2000</delay>
      <copy_directory>
        <source_path>F:\Jenny\110824_V3_jess_pilot\H89_background</source_path>
        <target_path>M:\Jenny\110824_V3_jess_pilot\H89_background</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   

<valve_protocol>StripFormamide</valve_protocol>
        
       

    

       

   
    
</command_sequence>

<item name = "ConvDNA1">
  <movie>
    <name increment = "Yes">Conv_zscan_</name>
            <overwrite>True</overwrite>
    <length>180</length>
    <parameters>60X_4col</parameters>
<check_focus><num_focus_checks>20</num_focus_checks><focus_scan/></check_focus>
    <variable_entry name = "Position Loop Zscan1"></variable_entry>
  </movie>
</item>


    <loop_variable name = "Position Loop Zscan1">
   <file_path></file_path>
</loop_variable>
</recipe>