<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>

<command_sequence>



<valve_protocol>Hybridize 5</valve_protocol>
<change_directory>F:\Jenny\110824_V3_jess_pilot\H89_P1_H7_8_9</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>

<delay>2000</delay>
      <copy_directory>
        <source_path>F:\Jenny\110824_V3_jess_pilot\H89_P1_H7_8_9</source_path>
        <target_path>M:\Jenny\110824_V3_jess_pilot\H89_P1_H7_8_9</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   

<valve_protocol>StripFormamide</valve_protocol>
        
       

    

       

   
    
</command_sequence>

<item name = "ConvDNA1">
  <movie>
    <name increment = "Yes">Conv_zscan_</name>
            <overwrite>True</overwrite>
    <length>180</length>
    <parameters>60X_4col</parameters>
<check_focus><num_focus_checks>20</num_focus_checks><focus_scan/></check_focus>
    <variable_entry name = "Position Loop Zscan1"></variable_entry>
  </movie>
</item>


    <loop_variable name = "Position Loop Zscan1">
   <file_path></file_path>
</loop_variable>
</recipe>