<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>

<command_sequence>

	<valve_protocol>Hybridize 2 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H1_P1_A1_2_3</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 3 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H2_P1_A4_5_6</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 4 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H3_P1_A7_8_9</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 5 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H4_P1_A10_11_12</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 6 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H5_P1_B1_2_3</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 7 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H6_P1_B4_5_6</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 8 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H7_P1_B7_8_9</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 9 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H8_P1_B10_11_12</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 10 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H9_P1_C1_2_3</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 11 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H10_P1_C4_5_6</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 12 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H11_P1_C7_8_9</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 13 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H12_P1_C10_11_12</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 14 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H13_P1_D1_2_3</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 15 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H14_P1_D4_5_6</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 16 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H15_P1_D7_8_9</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 17 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H16_P1_D10_11_12</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 18 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H17_P1_E1_2_3</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 19 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H18_P1_E4_5_6</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 20 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H19_P1_E7_8_9</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 21 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H20_P1_E10_11_12</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 22 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H21_P1_F1_2_3</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 23 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H22_P1_F4_5_6</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 24 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H23_P1_F7_8_9</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 25 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H24_P1_F10_11_12</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 26 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H25_P1_G1_2_3</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 27 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H26_P1_G4_5_6</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



<valve_protocol>Hybridize 28 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H27_P1_G7_8_9</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>



	
			
	  
</command_sequence>

<item name = "ConvDNA1">
  <movie>
    <name increment = "Yes">Conv_zscan_</name>
            <overwrite>True</overwrite>
    <length>180</length>
    <parameters>60X_4col</parameters>
<check_focus><num_focus_checks>20</num_focus_checks><focus_scan/></check_focus>
    <variable_entry name = "Position Loop Zscan1"></variable_entry>
  </movie>
</item>


    <loop_variable name = "Position Loop Zscan1">
   <file_path></file_path>
</loop_variable>
</recipe>