<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>

<command_sequence>
<valve_protocol>Hybridize 2 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H65_P2_F10_11_12</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>

<valve_protocol>Hybridize 2 thick_gel_750</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H66_P2_F10_11_12_750</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>

<valve_protocol>Hybridize 2 thick_gel_cy5</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H67_P2_F10_11_12_cy5</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>

<valve_protocol>Hybridize 10 thick_gel</valve_protocol>
<change_directory>F:\Jenny\031524_v1_acry_37C_pilot\H68_P3_B10_11_12</change_directory>
<loop name="Position Loop Zscan1" increment="name"><item name="ConvDNA1"></item></loop>
<valve_protocol>StripFormamide</valve_protocol>
	  
</command_sequence>

<item name = "ConvDNA1">
  <movie>
    <name increment = "Yes">Conv_zscan_</name>
            <overwrite>True</overwrite>
    <length>180</length>
    <parameters>60X_4col</parameters>
<check_focus><num_focus_checks>20</num_focus_checks><focus_scan/></check_focus>
    <variable_entry name = "Position Loop Zscan1"></variable_entry>
  </movie>
</item>


    <loop_variable name = "Position Loop Zscan1">
   <file_path></file_path>
</loop_variable>
</recipe>