<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>

<command_sequence>
      <change_directory>F:\Kai_Naomi\022725_DNA-FISH\H1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
		<valve_protocol>TCEP</valve_protocol>
		<valve_protocol>Hybridize 2</valve_protocol>
		<change_directory>F:\Kai_Naomi\022725_DNA-FISH\H2</change_directory>
		<loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>


		<valve_protocol>TCEP</valve_protocol>
		<valve_protocol>Hybridize 3</valve_protocol>
		<change_directory>F:\Kai_Naomi\022725_DNA-FISH\H3</change_directory>
		<loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>


		<valve_protocol>TCEP</valve_protocol>
		<valve_protocol>Hybridize 4</valve_protocol>
		<change_directory>F:\Kai_Naomi\022725_DNA-FISH\H4</change_directory>
		<loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>


		<valve_protocol>TCEP</valve_protocol>
		<valve_protocol>Hybridize 5</valve_protocol>
		<change_directory>F:\Kai_Naomi\022725_DNA-FISH\H5</change_directory>
		<loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>


		<valve_protocol>TCEP</valve_protocol>
		<valve_protocol>Hybridize 6</valve_protocol>
		<change_directory>F:\Kai_Naomi\022725_DNA-FISH\H6</change_directory>
		<loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>


		<valve_protocol>TCEP</valve_protocol>
		


</command_sequence>

<item name = "Conv1">
  <movie>
    <name increment = "Yes">Conv_zscan_</name>
            <overwrite>True</overwrite>
    <length>200</length>
    <parameters>60X_4col</parameters>

    <variable_entry name = "Position Loop Zscan1"></variable_entry>
  </movie>
</item>




    <loop_variable name = "Position Loop Zscan1">
   <file_path></file_path>
</loop_variable>


    </recipe>