<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>

<command_sequence>


<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 1</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H1_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H1_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H1_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H1_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H1_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H1_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 2</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H2_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H2_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H2_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H2_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H2_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H2_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 3</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H3_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H3_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H3_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H3_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H3_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H3_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 4</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H4_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H4_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H4_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H4_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H4_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H4_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 5</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H5_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H5_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H5_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H5_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H5_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H5_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 6</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H6_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H6_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H6_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H6_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H6_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H6_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 7</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H7_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H7_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H7_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H7_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H7_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H7_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 8</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H8_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H8_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H8_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H8_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H8_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H8_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 9</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H9_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H9_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H9_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H9_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H9_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H9_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 10</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H10_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H10_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H10_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H10_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H10_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H10_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 11</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H11_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H11_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H11_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H11_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H11_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H11_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 12</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H12_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H12_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H12_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H12_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H12_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H12_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 13</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H13_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H13_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H13_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H13_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H13_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H13_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 14</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H14_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H14_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H14_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H14_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H14_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H14_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 15</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H15_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H15_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H15_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H15_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H15_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H15_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 16</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H16_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H16_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H16_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H16_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H16_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H16_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 17</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H17_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H17_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H17_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H17_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H17_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H17_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 18</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H18_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H18_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H18_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H18_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H18_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H18_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 19</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H19_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H19_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H19_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H19_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H19_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H19_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   








<valve_protocol>StripFormamide</valve_protocol>
    <valve_protocol>Hybridize 20</valve_protocol>
    
    
    <wakeup>20000</wakeup>
   <change_directory>D:\SoniaC4_2_3_2023\H20_set1</change_directory> 
      <loop name = "Position Loop Zscan1" increment = "name"><item name = "Conv1"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>D:\SoniaC4_2_3_2023\H20_set1</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H20_set1</target_path>
        <delete_source>True</delete_source>
      </copy_directory>    

    <wakeup>20000</wakeup>
   <change_directory>H:\SoniaC4_2_3_2023\H20_set2</change_directory> 
      <loop name = "Position Loop Zscan2" increment = "name"><item name = "Conv2"></item></loop>
        
       

    <delay>2000</delay>
      <copy_directory>
        <source_path>H:\SoniaC4_2_3_2023\H20_set2</source_path>
        <target_path>V:\DCBB_human_011823_cs4\H20_set2</target_path>
        <delete_source>True</delete_source>
      </copy_directory>   





 
 
 
 
 
 
</command_sequence>

<item name = "Conv1">
  <movie>
    <name increment = "Yes">Conv_zscan_</name>
            <overwrite>True</overwrite>
    <length>120</length>
    <parameters>Kinetix-15Hz_750_647_561_405_15um_500nm</parameters>
<check_focus><num_focus_checks>20</num_focus_checks><focus_scan/></check_focus>
    <variable_entry name = "Position Loop Zscan1"></variable_entry>
  </movie>
</item><item name = "Conv2">
  <movie>
    <name increment = "Yes">Conv_zscan_</name>
            <overwrite>True</overwrite>
    <length>120</length>
    <parameters>Kinetix-15Hz_750_647_561_405_15um_500nm</parameters>
<check_focus><num_focus_checks>20</num_focus_checks><focus_scan/></check_focus>
    <variable_entry name = "Position Loop Zscan2"></variable_entry>
  </movie>
</item>
    <loop_variable name = "Position Loop Zscan1">
   <file_path>positionsControl_remount.txt</file_path>
</loop_variable>
    <loop_variable name = "Position Loop Zscan2">
   <file_path>positionsHD_remount.txt</file_path>
</loop_variable>
</recipe>